---
API: 2
OpenSesame: 3.0.2
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "New experiment"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set height 768
set foreground "white"
set description "Default description"
set coordinates "uniform"
set compensation 0
set canvas_backend "xpyriment"
set background "black"

define sequence Block
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Block_reset always
	run Trial always

define reset_feedback Block_reset
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad Initial
	set duration 1000
	set description "Displays stimuli"
	draw rect color=white fill=0 h=704 penwidth=5 show_if=always w=960 x=-480 y=-352 z_index=0
	draw line color=white penwidth=5 show_if=always x1=0 x2=0 y1=-352 y2=352 z_index=0

define sketchpad Intertrial
	set duration 1500
	set description "Displays stimuli"

define sketchpad Prepare
	set duration "[soa]"
	set description "Displays stimuli"
	draw rect color=white fill=0 h=704 penwidth=5 show_if=always w=960 x=-480 y=-352 z_index=0
	draw line color=white penwidth=5 show_if=always x1=0 x2=0 y1=-352 y2=352 z_index=0
	draw image center=1 file="[target_color]_[target_shape].png" scale=1 show_if=always x="[target_x]" y="[target_y]" z_index=0

define sketchpad Target
	set duration 500
	set description "Displays stimuli"
	draw rect color="[target_color]" fill=0 h=704 penwidth=5 show_if=always w=960 x=-480 y=-352 z_index=0
	draw line color="[target_color]" penwidth=5 show_if=always x1=0 x2=0 y1=-352 y2=352 z_index=0
	draw image center=1 file="[target_color]_[target_shape].png" scale=1 show_if=always x="[target_x]" y="[target_y]" z_index=0

define inline_script Target_Distractor_Settings
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	# Set up the colors of retangles and circles
	 target_shape_set = [Retangle:'Retangle', Circle:'Circle']
	# target_color_set = [Red:'Red', Green:'Green', Blue:'Blue', Yellow:'Yellow']
	#if target_shape == 'Retangle'
	
	#random.shuffle(stimulus_color_set)
	#color1 = stimulus_color_set[0]
	#color2 = stimulus_color_set[1]
	#color3 = stimulus_color_set[2]
	#color4 = stimulus_color_set[3]
	#exp.set("color1", color1)
	#exp.set("color2", color2)
	#exp.set("color3", color3)
	#exp.set("color4", color4)
	__end__

define loop Trial
	# Target shape and position
	# x    y     pos        shape
	# -256  160  left bottom   circle
	# 256 -160 right top      circle
	# 256  160 right bottom   retangle
	# -256 -160  left top      retangle
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_1"
	set description "Repeatedly runs another item"
	set cycles 16
	set column_order "soa;target_shape;target_color"
	set break_if "never"
	setcycle 0 soa "0"
	setcycle 0 target_shape "Retangle"
	setcycle 0 target_color "Red"
	setcycle 1 soa "0"
	setcycle 1 target_shape "Retangle"
	setcycle 1 target_color "Yellow"
	setcycle 2 soa "0"
	setcycle 2 target_shape "Retangle"
	setcycle 2 target_color "Blue"
	setcycle 3 soa "0"
	setcycle 3 target_shape "Retangle"
	setcycle 3 target_color "Green"
	setcycle 4 soa "0"
	setcycle 4 target_shape "Circle"
	setcycle 4 target_color "Red"
	setcycle 5 soa "0"
	setcycle 5 target_shape "Circle"
	setcycle 5 target_color "Yellow"
	setcycle 6 soa "0"
	setcycle 6 target_shape "Circle"
	setcycle 6 target_color "Blue"
	setcycle 7 soa "0"
	setcycle 7 target_shape "Circle"
	setcycle 7 target_color "Green"
	setcycle 8 soa "500"
	setcycle 8 target_shape "Retangle"
	setcycle 8 target_color "Red"
	setcycle 9 soa "500"
	setcycle 9 target_shape "Retangle"
	setcycle 9 target_color "Yellow"
	setcycle 10 soa "500"
	setcycle 10 target_shape "Retangle"
	setcycle 10 target_color "Blue"
	setcycle 11 soa "500"
	setcycle 11 target_shape "Retangle"
	setcycle 11 target_color "Green"
	setcycle 12 soa "500"
	setcycle 12 target_shape "Circle"
	setcycle 12 target_color "Red"
	setcycle 13 soa "500"
	setcycle 13 target_shape "Circle"
	setcycle 13 target_color "Yellow"
	setcycle 14 soa "500"
	setcycle 14 target_shape "Circle"
	setcycle 14 target_color "Blue"
	setcycle 15 soa "500"
	setcycle 15 target_shape "Circle"
	setcycle 15 target_color "Green"
	run Trial_1

define sequence Trial_1
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Target_Distractor_Settings always
	run Intertrial always
	run Initial always
	run Prepare always
	run Target always

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run start always

define loop start
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Block"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Block

